PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'design': '1', 'position': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1792, 1120]
  expName = global_local
  logging level = debug
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Routines
  Routine screen_scale
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        webbrowser=window;

        random=Math.random;
        randint=function(min, maxplusone) {
            return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }

        round = function(num, n=0) {
            return +(Math.round(num + ("e+" + n))  + ("e-" + n));
        }

        psychoJS.downloadResources([{name: ("Stimuli/greenCheck.png"), path:("Stimuli/greenCheck.png")},
        {name: ("Stimuli/redWrong.png"), path:("Stimuli/redWrong.png")},
        {name: ("Stimuli/HofH2.bmp"), path:("Stimuli/HofH2.bmp")},
        {name: ("Stimuli/HofS2.bmp"), path:("Stimuli/HofS2.bmp")},
        {name: ("Stimuli/SofH2.bmp"), path:("Stimuli/SofH2.bmp")},
        {name: ("Stimuli/SofS2.bmp"), path:("Stimuli/SofS2.bmp")},
        {name: ("Designs/design1_run1.png"), path:("Designs/design1_run1.png")},
        {name: ("Designs/design2_run1.png"), path:("Designs/design2_run1.png")},
        {name: ("Designs/design3_run1.png"), path:("Designs/design3_run1.png")},
        {name: ("Designs/design4_run1.png"), path:("Designs/design4_run1.png")},
        {name: ("Designs/design1_run2.png"), path:("Designs/design1_run2.png")},
        {name: ("Designs/design2_run2.png"), path:("Designs/design2_run2.png")},
        {name: ("Designs/design3_run2.png"), path:("Designs/design3_run2.png")},
        {name: ("Designs/design4_run2.png"), path:("Designs/design4_run2.png")},
        {name: ("Designs/design1_run1.csv"), path:("Designs/design1_run1.csv")},
        {name: ("Designs/design2_run1.csv"), path:("Designs/design2_run1.csv")},
        {name: ("Designs/design3_run1.csv"), path:("Designs/design3_run1.csv")},
        {name: ("Designs/design4_run1.csv"), path:("Designs/design4_run1.csv")},
        {name: ("Designs/design1_run2.csv"), path:("Designs/design1_run2.csv")},
        {name: ("Designs/design2_run2.csv"), path:("Designs/design2_run2.csv")},
        {name: ("Designs/design3_run2.csv"), path:("Designs/design3_run2.csv")},
        {name: ("Designs/design4_run2.csv"), path:("Designs/design4_run2.csv")}]);

        expInfo['OS'] = window.navigator.platform;
        expInfo['xResolution'] = screen.width;
        expInfo['yResolution'] = screen.height;
    CodeComponent code_1
      Code Type = Auto->JS
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      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1

        # h = tan(degrees = 2) x (distance = 49.53)
        height = 3.459
        width = 3.459
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Resize this image to match the size of a credit card with arrow keys
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    TextComponent text_bottom
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press Space when you’re finished
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    ImageComponent ccimage
      image = bankcard.png
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine pracInstruct
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        fixColor_opts = ["orange", "pink"];
        shuffle(fixColor_opts);
        prac1_fixColSwitch = [0,0,0,1];
        shuffle(prac1_fixColSwitch);
        prac2_fixColSwitch = [0,0,0,1];
        shuffle(prac2_fixColSwitch);
        fixColorIdx_Run1 =  [0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1];
        shuffle(fixColorIdx_Run1);
        fixColorIdx_Run2 = [0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1];
        shuffle(fixColorIdx_Run2);


        thisExp.addData('fixpR1', prac1_fixColSwitch)
        thisExp.addData('fixR1', fixColorIdx_Run1)
        thisExp.addData('fixpR2', prac2_fixColSwitch)
        thisExp.addData('fixR2', fixColorIdx_Run2)
    TextComponent start_exp_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        You will play two games.
        Before you start, let’s do some practice!

        Are you ready?
        Press ’Space’ to start practice!
    KeyboardComponent start_exp_press
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine prac_instr_run1
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['design']=='1':
            instructions_run1 = 'Designs/design1_run1.png'
            cond_file_run1 = 'Designs/design1_run1.csv'
        elif expInfo['design']=='2':
            instructions_run1 = 'Designs/design2_run1.png'
            cond_file_run1 = 'Designs/design2_run1.csv'
        elif expInfo['design']=='3':
            instruction_run1 = 'Designs/design3_run1.png'
            cond_file_run1 = 'Designs/design3_run1.csv'
        elif expInfo['design']=='4':
            instructions_run1 = 'Designs/design4_run1.png'
            cond_file_run1 = 'Designs/design4_run1.csv'

        rand8Idx = [0,1,2,3,4,5,6,7];
        shuffle(rand8Idx)
        rand4rows_run1 = rand8Idx[0:4]
    ImageComponent instructions_imageR1
      image [set every repeat] = $instructions_run1
      size = (0.75*1.5, 0.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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Flow
  Routine screen_scale
  Routine pracInstruct
  Routine prac_instr_run1
